PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'Mano (D/S)': u'D', u'Genere (M/F)': u'M', u'participant': u'1', u'Et\xe0': u'1', u'Nome': u'Leo'}
  expName = metaphor-comprehension
  Units = use prefs
  Screen = 1
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Routines
  Routine reset
    TextComponent Fixation_point
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine welcome_message
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      text [set every repeat] = $welcome_message
      startVal [time (s)] = 0.5
      font = Comic Sans MS
      letterHeight = 0.08
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    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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    CodeComponent code
      Begin Experiment:
        import utils.shuffleRows as shuffleRows
        file_input = ['./stimuli/arguments.csv', './stimuli/distractors.csv']
        file_output = '/tmp/arguments.csv'
        shuffleRows.ShuffleRows(file_input, file_output)
    TextComponent text_4
      color = yellow
      text [set every repeat] = $welcome_message_end
      startVal [time (s)] = 0.5
      font = Comic Sans MS
      letterHeight = 0.07
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  Routine instructions_message
    TextComponent instructions_text
      text [set every repeat] = $instructions_message
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.053
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    TextComponent text_6
      color = yellow
      text [set every repeat] = $instructions_message_end
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.05
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine missing_word
    TextComponent text_2
      color = red
      text [set every repeat] = $TW
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.18 
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  Routine question
    TextComponent question_text
      text [set every repeat] = $question
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.09
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    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'q', 'bracketright'
      startVal [time (s)] = 0.0
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    TextComponent answer_text
      color = yellow
      text [set every repeat] = $answer
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.1
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  Routine fixation_point
    TextComponent text_3
      color = red
      text [set every repeat] = $fixation_point_symbol
      stopVal [duration (s)] = 0.500
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine arguments
    TextComponent arguments_text
      text [set every repeat] = 'P1: ' + $premise1 + '\n\n' +'P2: ' + $premise2 +'\n_______________________________\n\n' + 'C: ' + $conclusion
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.08
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent missing_word_text
      color = yellow
      text [set every repeat] = $show_missing_word
      startVal [time (s)] = 0.0
      font = Comic Sans MS
      letterHeight = 0.052
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Flow
  LoopInitiator experiment_instructions_loop loopType="TrialHandler"
    conditionsFile = instructions/experiment.xlsx
    loopType = random
    nReps = 1
    conditions = [{u'instructions_message': u'                                      ISTRUZIONI\n\nLeggerete degli argomenti composti da due premesse (P1 e P2) e una conclusione (C). Alle premesse manca un termine. Giudicate poi se la conclusione segue dalle premesse, rispondendo:\n\n                     SI (La conclusione segue dalle premesse) \n                                                 \u2193\n                                   premete sul tasto [q] \n\n                                             oppure:\n\n                NO (La conclusione NON segue dalle premesse) \n                                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    Routine welcome_message
    Routine instructions_message
  LoopTerminator experiment_instructions_loop
  LoopInitiator arguments_loop loopType="TrialHandler"
    conditionsFile = ../../../../../private/tmp/arguments.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ArgumentType': u'TPTC', 'ArgumentNumber': 1, 'TWType': u'V', 'TW': u'SAMBA', 'premise2': u'Una ... \xe8 vivace ', 'premise1': u'La gioia \xe8 una ... ', 'conclusion': u'La gioia \xe8 vivace', 'ArgumentBlock': u'P', 'CorrectAnswer': u'Y'},
      {'ArgumentType': u'TPFC', 'ArgumentNumber': 2, 'TWType': u'V', 'TW': u'SCIALUPPA', 'premise2': u'Una ... Scende dalla nave ', 'premise1': u'Il conforto \xe8 una ... ', 'conclusion': u'Il conforto scende dalla nave', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 2, 'TWType': u'distrattore', 'TW': u'MOGLIE', 'premise2': u'Una ... \xe8 una donna sposata ', 'premise1': u'Luigi ha una ... ', 'conclusion': u'Luigi \xe8 una donna sposata', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 1, 'TWType': u'distrattore', 'TW': u'MEDICINA', 'premise2': u'... \xe8 una scienza ', 'premise1': u'Franco studia ...  ', 'conclusion': u'Franco studia una scienza', 'ArgumentBlock': u'P', 'CorrectAnswer': u'Y'},
      {'ArgumentType': u'TPPC', 'ArgumentNumber': 2, 'TWType': u'L', 'TW': u'APPRODO', 'premise2': u'Un ... consente il riposo ', 'premise1': u'La laurea \xe8 un ... ', 'conclusion': u'La laurea consente il riposo', 'ArgumentBlock': u'P', 'CorrectAnswer': u'N'}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
    LoopInitiator arguments_instructions_loop loopType="TrialHandler"
      conditionsFile = instructions/arguments.xlsx
      loopType = sequential
      nReps = 1
      conditions = [{u'answer': u'\n\n\n\n\n\n\n\n\n[q] <-- SI             NO --> [+]', u'question': u'La conclusione segue dalla premesse?', u'fixation_point_symbol': u'+', u'show_missing_word': u'\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\n\nPremete la barra spaziatrice per visualizzare il termine mancante.'}]
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      Routine arguments
      Routine missing_word
      Routine question
      Routine fixation_point
    LoopTerminator arguments_instructions_loop
  LoopTerminator arguments_loop
